PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'age': '', 'handedness (right/left)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = letters
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Routines
  Routine trial
    TextComponent letter_left
      letterHeight = 0.1
      pos = (-0.2, 0)
      startVal [time (s)] = 0.1
      text [set every repeat] = $left
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    TextComponent letter_right
      letterHeight = 0.1
      pos = (+0.2, 0)
      startVal [time (s)] = 0.1
      text [set every repeat] = $right
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    KeyboardComponent key_resp
      allowedKeys = 'left', 'right'
      correctAns = $correctAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = .1
      storeCorrect = True
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    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine instr
    TextComponent text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press left arrow if the A is on the left.

        Press right arrow if the A is on the right.

        Press down arrow to begin...
    KeyboardComponent key_resp_2
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine done
    TextComponent text_done
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = All done!!
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stims.xlsx
    loopType = fullRandom
    nReps = 100
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    conditions:
      [OrderedDict([('letter', 'A')]),
      OrderedDict([('letter', 'B')])]
    Routine trial
  LoopTerminator trials
  Routine done
