PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001', 'native language': 'Danish'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = pseudohomophones_EW
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Routines
  Routine trial
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = +
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    TextComponent upperStim
      letterHeight = 0.1
      pos = (0, +0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      text [set every repeat] = $upperWord
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    TextComponent lowerStim
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      text [set every repeat] = $lowerWord
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    KeyboardComponent resp
      allowedKeys = 'up', 'down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine instr
    TextComponent training_instr
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Practice run:
        ø å æ
        Use the up and down keys to pick the real word.

        Press space to begin
    KeyboardComponent training_start_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_test
    TextComponent test_instr
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Now it is time for the actual test.


        Use the up and down arrows to pick the real word

        Press space to begin
    KeyboardComponent test_start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator training loopType="TrialHandler"
    conditionsFile = trainingA.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('upperWord', 'DEAR'), ('lowerWord', 'DEUR'), ('corrAns', 'up'), ('wordType', 'HOMOPHONE')]),
      OrderedDict([('upperWord', 'HAIR'), ('lowerWord', 'HAUR'), ('corrAns', 'up'), ('wordType', 'HOMOPHONE')]),
      OrderedDict([('upperWord', 'LAID'), ('lowerWord', 'LAOD'), ('corrAns', 'up'), ('wordType', 'HOMOPHONE')]),
      OrderedDict([('upperWord', 'LOAD'), ('lowerWord', 'LOED'), ('corrAns', 'up'), ('wordType', 'HOMOPHONE')]),
      OrderedDict([('upperWord', 'MEET'), ('lowerWord', 'MEOT'), ('corrAns', 'up'), ('wordType', 'HOMOPHONE')]),
      OrderedDict([('upperWord', 'POUR'), ('lowerWord', 'POIR'), ('corrAns', 'up'), ('wordType', 'HOMOPHONE')]),
      OrderedDict([('upperWord', 'SEED'), ('lowerWord', 'SAED'), ('corrAns', 'up'), ('wordType', 'HOMOPHONE')]),
      OrderedDict([('upperWord', 'COIN'), ('lowerWord', 'COAN'), ('corrAns', 'up'), ('wordType', 'WORD')]),
      OrderedDict([('upperWord', 'DEAF'), ('lowerWord', 'DIAF'), ('corrAns', 'up'), ('wordType', 'WORD')]),
      OrderedDict([('upperWord', 'DENY'), ('lowerWord', 'DINY'), ('corrAns', 'up'), ('wordType', 'WORD')]),
      OrderedDict([('upperWord', 'FISH'), ('lowerWord', 'FESH'), ('corrAns', 'up'), ('wordType', 'WORD')]),
      OrderedDict([('upperWord', 'HOOT'), ('lowerWord', 'HEOT'), ('corrAns', 'up'), ('wordType', 'WORD')]),
      OrderedDict([('upperWord', 'SPOT'), ('lowerWord', 'SMOT'), ('corrAns', 'up'), ('wordType', 'WORD')]),
      OrderedDict([('upperWord', 'TWIN'), ('lowerWord', 'TRIN'), ('corrAns', 'up'), ('wordType', 'WORD')])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
    Routine trial
  LoopTerminator training
  Routine instr_test
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = testing.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('nonwordType', 'PSEUDOHOMOPHONE'), ('upperWord', 'BILL'), ('lowerWord', 'AHMS'), ('corrAns', 'up')]),
      OrderedDict([('nonwordType', 'PSEUDOHOMOPHONE'), ('upperWord', 'BORN'), ('lowerWord', 'BILD'), ('corrAns', 'up')]),
      OrderedDict([('nonwordType', 'PSEUDOHOMOPHONE'), ('upperWord', 'BOYS'), ('lowerWord', 'CORT'), ('corrAns', 'up')]),
      OrderedDict([('nonwordType', 'PSEUDOHOMOPHONE'), ('upperWord', 'CALL'), ('lowerWord', 'DERT'), ('corrAns', 'up')]),
      OrderedDict([('nonwordType', 'PSEUDOHOMOPHONE'), ('upperWord', 'CARS'), ('lowerWord', 'FLOO'), ('corrAns', 'up')]),
      OrderedDict([('nonwordType', 'PSEUDOHOMOPHONE'), ('upperWord', 'COLD'), ('lowerWord', 'GARD'), ('corrAns', 'up')]),
      OrderedDict([('nonwordType', 'PSEUDOHOMOPHONE'), ('upperWord', 'DARN'), ('lowerWord', 'GROE'), ('corrAns', 'up')]),
      OrderedDict([('nonwordType', 'CONTROL'), ('upperWord', 'DATE'), ('lowerWord', 'AHNS'), ('corrAns', 'up')]),
      OrderedDict([('nonwordType', 'CONTROL'), ('upperWord', 'DEEP'), ('lowerWord', 'BAIF'), ('corrAns', 'up')]),
      OrderedDict([('nonwordType', 'CONTROL'), ('upperWord', 'EASY'), ('lowerWord', 'BIRL'), ('corrAns', 'up')]),
      OrderedDict([('nonwordType', 'CONTROL'), ('upperWord', 'FARM'), ('lowerWord', 'BORY'), ('corrAns', 'up')]),
      OrderedDict([('nonwordType', 'CONTROL'), ('upperWord', 'FEED'), ('lowerWord', 'VECE'), ('corrAns', 'up')]),
      OrderedDict([('nonwordType', 'CONTROL'), ('upperWord', 'FIRE'), ('lowerWord', 'DREE'), ('corrAns', 'up')])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
    Routine trial
  LoopTerminator trials
