PsychoPy2experiment version="1.71.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {'participant':' ', 'session':'005', 'gender':' ', 'age':' '} 
  Save excel file = True
  Units = norm
  Screen = 1
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Routines
  Routine trial
    TextComponent fixation
      text = +
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent upperStim
      text [set every repeat] = $upperWord
      stopVal [duration (s)] = 3.0
      pos = [0, +0.2]
      units = norm
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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    TextComponent lowerStim
      text [set every repeat] = $lowerWord
      stopVal [duration (s)] = 3.0
      pos = [0, -0.2]
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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    KeyboardComponent key_resp
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 3.0
      forceEndRoutine = True
      allowedKeys = "up","down"
      startVal [time (s)] = 1.0
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  Routine practiceInstr
    TextComponent practInstrText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Press 'up' or 'down' keys to indicate which of each pair is the real word

        Press an key to begin
    KeyboardComponent practiceStart
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr
    TextComponent instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        OK, ready for the real thing?

        Press 'up' or 'down' keys to indicate which is the real word

        Press an key to begin
    KeyboardComponent mainTrialsStart
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator training loopType="TrialHandler"
    conditionsFile = trainingB.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'wordType': u'WORD', u'upperWord': u'CLUB', u'lowerWord': u'CLEB', u'corrAns': u'up'},
      {u'wordType': u'WORD', u'upperWord': u'COIN', u'lowerWord': u'COAN', u'corrAns': u'up'},
      {u'wordType': u'WORD', u'upperWord': u'CORK', u'lowerWord': u'COLK', u'corrAns': u'up'},
      {u'wordType': u'WORD', u'upperWord': u'DEAF', u'lowerWord': u'DIAF', u'corrAns': u'up'},
      {u'wordType': u'WORD', u'upperWord': u'DENY', u'lowerWord': u'DINY', u'corrAns': u'up'},
      {u'wordType': u'WORD', u'upperWord': u'EDGE', u'lowerWord': u'EDLE', u'corrAns': u'up'},
      {u'wordType': u'WORD', u'upperWord': u'FALL', u'lowerWord': u'FAHL', u'corrAns': u'up'},
      {u'wordType': u'WORD', u'upperWord': u'FISH', u'lowerWord': u'FESH', u'corrAns': u'up'},
      {u'wordType': u'WORD', u'upperWord': u'HOOT', u'lowerWord': u'HEOT', u'corrAns': u'up'},
      {u'wordType': u'WORD', u'upperWord': u'SAKE', u'lowerWord': u'SIKE', u'corrAns': u'up'},
      {u'wordType': u'WORD', u'upperWord': u'SALT', u'lowerWord': u'SART', u'corrAns': u'up'},
      {u'wordType': u'WORD', u'upperWord': u'SOIL', u'lowerWord': u'SOEL', u'corrAns': u'up'},
      {u'wordType': u'WORD', u'upperWord': u'SPOT', u'lowerWord': u'SMOT', u'corrAns': u'up'},
      {u'wordType': u'WORD', u'upperWord': u'TWIN', u'lowerWord': u'TRIN', u'corrAns': u'up'},
      {u'wordType': u'WORD', u'upperWord': u'UNIT', u'lowerWord': u'UNAT', u'corrAns': u'up'},
      {u'wordType': u'WORD', u'upperWord': u'BESY', u'lowerWord': u'BUSY', u'corrAns': u'down'},
      {u'wordType': u'WORD', u'upperWord': u'FOAD', u'lowerWord': u'FOOD', u'corrAns': u'down'}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
    Routine trial
  LoopTerminator training
  LoopInitiator testing loopType="TrialHandler"
    conditionsFile = testing.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'wordType': u'PSEUDOHOMOPHONE', u'upperWord': u'BILL', u'lowerWord': u'AHMS', u'corrAns': u'up'},
      {u'wordType': u'PSEUDOHOMOPHONE', u'upperWord': u'BORN', u'lowerWord': u'BILD', u'corrAns': u'up'},
      {u'wordType': u'PSEUDOHOMOPHONE', u'upperWord': u'BOYS', u'lowerWord': u'CORT', u'corrAns': u'up'},
      {u'wordType': u'PSEUDOHOMOPHONE', u'upperWord': u'CALL', u'lowerWord': u'DERT', u'corrAns': u'up'},
      {u'wordType': u'PSEUDOHOMOPHONE', u'upperWord': u'CARS', u'lowerWord': u'FLOO', u'corrAns': u'up'},
      {u'wordType': u'PSEUDOHOMOPHONE', u'upperWord': u'COLD', u'lowerWord': u'GARD', u'corrAns': u'up'},
      {u'wordType': u'PSEUDOHOMOPHONE', u'upperWord': u'DARN', u'lowerWord': u'GROE', u'corrAns': u'up'},
      {u'wordType': u'CONTROL', u'upperWord': u'DATE', u'lowerWord': u'AHNS', u'corrAns': u'up'},
      {u'wordType': u'CONTROL', u'upperWord': u'DEEP', u'lowerWord': u'BAIF', u'corrAns': u'up'},
      {u'wordType': u'CONTROL', u'upperWord': u'EASY', u'lowerWord': u'BIRL', u'corrAns': u'up'},
      {u'wordType': u'CONTROL', u'upperWord': u'FARM', u'lowerWord': u'BORY', u'corrAns': u'up'},
      {u'wordType': u'CONTROL', u'upperWord': u'FEED', u'lowerWord': u'VECE', u'corrAns': u'up'},
      {u'wordType': u'CONTROL', u'upperWord': u'FIRE', u'lowerWord': u'DREE', u'corrAns': u'up'},
      {u'wordType': u'CONTROL', u'upperWord': u'FOOD', u'lowerWord': u'FEVE', u'corrAns': u'up'},
      {u'wordType': u'CONTROL', u'upperWord': u'HOPE', u'lowerWord': u'FUTE', u'corrAns': u'up'}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
    Routine trial
  LoopTerminator testing
