PsychoPy2experiment version="1.62.00"
Settings
  Monitor = testMonitor
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'005', 'gender':'', 'age':''}
  logging level = warning
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent fixation
      text = +
      duration = 0.5
      letterHeight = 0.1
      startTime = 0.0
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    PatchComponent target
      image [set every repeat] = $image
      mask = none
      interpolate = nearest
      duration = 1.5
      startTime = 1.0
      ori [set every repeat] = $orientation
      units = pix
      sf = None
      size = [400,400]
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    KeyboardComponent resp
      storeCorrect = True
      forceEndTrial = True
      correctAns = $corrAns
      storeResponseTime = True
      startTime = 1.0
      allowedKeys = ["left","right"]
      duration = 1.5
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  Routine goodbye
    TextComponent thanksText
      letterHeight = 0.1
      startTime = 0.0
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      text:
        Thanks and goodbye to you!
    KeyboardComponent endInstr
      forceEndTrial = True
      storeResponseTime = False
      startTime = 0.0
      store = nothing
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  Routine instructions
    TextComponent instrText
      letterHeight = 0.1
      startTime = 0.0
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      text:
        In this experiment you need to respond by pressing;
          LEFT cursor when the letter is NORMAL
          RIGHT cursor when it's MIRRORED

        Please respond as quickly and accurately as you can

        Press any key to start
    KeyboardComponent endInstr
      forceEndTrial = True
      storeResponseTime = False
      startTime = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 2
    trialList = [{u'image': u'G.png', u'orientation': 0, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'G.png', u'orientation': 10, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'G.png', u'orientation': 20, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'G.png', u'orientation': 30, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'G.png', u'orientation': 40, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'G.png', u'orientation': 50, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'G.png', u'orientation': 60, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'G.png', u'orientation': 70, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'G.png', u'orientation': 80, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'G.png', u'orientation': 90, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'G.png', u'orientation': 100, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'G.png', u'orientation': 110, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'G.png', u'orientation': 120, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'G.png', u'orientation': 130, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'G.png', u'orientation': 140, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'G.png', u'orientation': 150, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'G.png', u'orientation': 160, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'G.png', u'orientation': 170, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'G.png', u'orientation': 180, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'revG.png', u'orientation': 0, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revG.png', u'orientation': 10, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revG.png', u'orientation': 20, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revG.png', u'orientation': 30, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revG.png', u'orientation': 40, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revG.png', u'orientation': 50, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revG.png', u'orientation': 60, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revG.png', u'orientation': 70, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revG.png', u'orientation': 80, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revG.png', u'orientation': 90, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revG.png', u'orientation': 100, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revG.png', u'orientation': 110, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revG.png', u'orientation': 120, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revG.png', u'orientation': 130, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revG.png', u'orientation': 140, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revG.png', u'orientation': 150, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revG.png', u'orientation': 160, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revG.png', u'orientation': 170, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revG.png', u'orientation': 180, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'R.png', u'orientation': 0, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'R.png', u'orientation': 10, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'R.png', u'orientation': 20, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'R.png', u'orientation': 30, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'R.png', u'orientation': 40, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'R.png', u'orientation': 50, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'R.png', u'orientation': 60, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'R.png', u'orientation': 70, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'R.png', u'orientation': 80, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'R.png', u'orientation': 90, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'R.png', u'orientation': 100, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'R.png', u'orientation': 110, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'R.png', u'orientation': 120, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'R.png', u'orientation': 130, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'R.png', u'orientation': 140, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'R.png', u'orientation': 150, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'R.png', u'orientation': 160, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'R.png', u'orientation': 170, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'R.png', u'orientation': 180, u'mirrored': 0, u'corrAns': u'left'}, {u'image': u'revR.png', u'orientation': 0, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revR.png', u'orientation': 10, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revR.png', u'orientation': 20, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revR.png', u'orientation': 30, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revR.png', u'orientation': 40, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revR.png', u'orientation': 50, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revR.png', u'orientation': 60, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revR.png', u'orientation': 70, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revR.png', u'orientation': 80, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revR.png', u'orientation': 90, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revR.png', u'orientation': 100, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revR.png', u'orientation': 110, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revR.png', u'orientation': 120, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revR.png', u'orientation': 130, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revR.png', u'orientation': 140, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revR.png', u'orientation': 150, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revR.png', u'orientation': 160, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revR.png', u'orientation': 170, u'mirrored': 1, u'corrAns': u'right'}, {u'image': u'revR.png', u'orientation': 180, u'mirrored': 1, u'corrAns': u'right'}]
    trialListFile = trialtypes.xlsx
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    Routine trial
  LoopTerminator trials
  Routine goodbye
