PsychoPy2experiment version="1.70.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine instrTest
    TextComponent instrTestText_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        That's the learning process over.

        Experimenter's: you should now leave the designated gap before pressing the SPACE bar to go into the testing phase
    KeyboardComponent beginTesting_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent endText
      text = That's it! Thanks for taking part!
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine recall
    TextComponent fix_recall
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PatchComponent face_recall
      stopVal [duration (s)] = 5
      sf = None
      startVal [time (s)] = 0.5
      image [set every repeat] = $image
      size = [0.5, 0.5]
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  Routine instr1
    TextComponent instr1_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You will see a series of names, each of which will be followed by a photograph of that person.
        Your task is to remember the name which corresponds to each photograph.


        <press a key to continue>
    KeyboardComponent contin1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr2
    TextComponent instr2_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        The same photographs will be shown again shortly afterwards,this time without the names.Then you should attempt to recall the names of each person to the experimenter.

        <press a key to continue>
    KeyboardComponent contin2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine learn
    TextComponent fix
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PatchComponent face
      stopVal [duration (s)] = 5
      sf = [1.0/360,1.0/480]
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $image
      size [set every repeat] = [360,480]
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    TextComponent nameText
      text [set every repeat] = $name
      stopVal [duration (s)] = 5
      pos = [0, 400]
      units = pix
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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Flow
  Routine instr1
  Routine instr1
  LoopInitiator learn_trials loopType="TrialHandler"
    conditionsFile = faces.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'image': u'f006.bmp', u'name': u'Joanna'},
      {u'image': u'f014.bmp', u'name': u'Helen'},
      {u'image': u'f020.bmp', u'name': u'Rebecca'},
      {u'image': u'f021.bmp', u'name': u'Bethany'},
      {u'image': u'f032.bmp', u'name': u'Amy'},
      {u'image': u'f033.bmp', u'name': u'Katie'},
      {u'image': u'f041.bmp', u'name': u'Phoebe'},
      {u'image': u'f045.bmp', u'name': u'Natasha'},
      {u'image': u'f072.bmp', u'name': u'Zoe'},
      {u'image': u'f082.bmp', u'name': u'Imogen'},
      {u'image': u'm003.bmp', u'name': u'Jack'},
      {u'image': u'm004.bmp', u'name': u'Thomas'},
      {u'image': u'm042.bmp', u'name': u'Daniel'},
      {u'image': u'm056.bmp', u'name': u'Harry'},
      {u'image': u'm067.bmp', u'name': u'Samuel'},
      {u'image': u'm068.bmp', u'name': u'Matthew'},
      {u'image': u'm075.bmp', u'name': u'Callum'},
      {u'image': u'm078.bmp', u'name': u'Luke'},
      {u'image': u'm083.bmp', u'name': u'William'},
      {u'image': u'm084.bmp', u'name': u'Oliver'}]
    Routine learn
  LoopTerminator learn_trials
  Routine instrTest
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = faces.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'image': u'f006.bmp', u'name': u'Joanna'},
      {u'image': u'f014.bmp', u'name': u'Helen'},
      {u'image': u'f020.bmp', u'name': u'Rebecca'},
      {u'image': u'f021.bmp', u'name': u'Bethany'},
      {u'image': u'f032.bmp', u'name': u'Amy'},
      {u'image': u'f033.bmp', u'name': u'Katie'},
      {u'image': u'f041.bmp', u'name': u'Phoebe'},
      {u'image': u'f045.bmp', u'name': u'Natasha'},
      {u'image': u'f072.bmp', u'name': u'Zoe'},
      {u'image': u'f082.bmp', u'name': u'Imogen'},
      {u'image': u'm003.bmp', u'name': u'Jack'},
      {u'image': u'm004.bmp', u'name': u'Thomas'},
      {u'image': u'm042.bmp', u'name': u'Daniel'},
      {u'image': u'm056.bmp', u'name': u'Harry'},
      {u'image': u'm067.bmp', u'name': u'Samuel'},
      {u'image': u'm068.bmp', u'name': u'Matthew'},
      {u'image': u'm075.bmp', u'name': u'Callum'},
      {u'image': u'm078.bmp', u'name': u'Luke'},
      {u'image': u'm083.bmp', u'name': u'William'},
      {u'image': u'm084.bmp', u'name': u'Oliver'}]
    Routine learn
  LoopTerminator trials
  Routine end
