PsychoPy2experiment version="1.70.01"
Settings
  Monitor = testMonitor
  color = grey
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  Save excel file = True
  Units = cm
  Screen = 1
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Routines
  Routine trial
    TextComponent fixate
      text = +
      startVal [time (s)] = 0
      letterHeight = 1
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    TextComponent fixateFlash
      color = black
      text = +
      stopVal [duration (frames)] = 6
      durationEstim = 0.1
      startVal [time (s)] = 2.3
      letterHeight = 1
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    PatchComponent cue
      color = $[1.000,0.365,-1.000]
      stopVal [duration (frames)] = 6
      durationEstim = 0.1
      pos [set every repeat] = $[CueX, 0]
      sf = None
      startEstim = 2
      startVal [frame N] = 120
      image = None
      size = [11, 9]
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    PatchComponent rectL
      color = $[-0.271,-0.271,-0.271]
      stopVal [condition] = target.status==FINISHED
      durationEstim = 3.5
      pos = [-10, 0]
      sf = None
      startEstim = 1
      units = cm
      startVal [frame N] = 60
      image = none
      size = [10, 8]
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    PatchComponent rectR
      color = $[-0.271,-0.271,-0.271]
      stopVal [condition] = target.status==FINISHED
      durationEstim = 3.5
      pos = [10, 0]
      sf = None
      startEstim = 1
      units = cm
      startVal [frame N] = 60
      image = none
      size = [10, 8]
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    TextComponent target
      text = X
      stopVal [duration (s)] = 2.0
      pos [set every repeat] = $[TargetX, 0]
      startEstim = 2.4
      startVal [time (s)] = $1+1+0.1+SOA
      letterHeight = 1
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    KeyboardComponent key_resp
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = True
      startEstim = 2.4
      allowedKeys = "space"
      startVal [time (s)] = $1+1+0.1+SOA
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  Routine endinstr
    TextComponent endtext
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        The experiment is now over!

        Thanks.
  Routine instr
    TextComponent instr1
      text = Instruction Holder
      startVal [time (s)] = 0.0
      letterHeight = 1
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    KeyboardComponent instr1_resp
      forceEndRoutine = True
      allowedKeys = "space"
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instr
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = IOR_list2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'SOA': 0.050000000000000003, u'TargetX': -10, u'corrAns': u'space', u'Validity': u'Valid', u'CueX': -10},
      {u'SOA': 0.050000000000000003, u'TargetX': 10, u'corrAns': u'space', u'Validity': u'Valid', u'CueX': 10},
      {u'SOA': 0.050000000000000003, u'TargetX': 10, u'corrAns': u'space', u'Validity': u'Invalid', u'CueX': -10},
      {u'SOA': 0.050000000000000003, u'TargetX': -10, u'corrAns': u'space', u'Validity': u'Invalid', u'CueX': 10},
      {u'SOA': 0.050000000000000003, u'TargetX': 400, u'corrAns': None, u'Validity': u'Notarg', u'CueX': -10},
      {u'SOA': 0.050000000000000003, u'TargetX': 400, u'corrAns': None, u'Validity': u'Notarg', u'CueX': 10},
      {u'SOA': 0.050000000000000003, u'TargetX': 400, u'corrAns': None, u'Validity': u'Notarg', u'CueX': -10},
      {u'SOA': 0.050000000000000003, u'TargetX': 400, u'corrAns': None, u'Validity': u'Notarg', u'CueX': 10},
      {u'SOA': 0.10000000000000001, u'TargetX': -10, u'corrAns': u'space', u'Validity': u'Valid', u'CueX': -10},
      {u'SOA': 0.10000000000000001, u'TargetX': 10, u'corrAns': u'space', u'Validity': u'Valid', u'CueX': 10},
      {u'SOA': 0.10000000000000001, u'TargetX': 10, u'corrAns': u'space', u'Validity': u'Invalid', u'CueX': -10},
      {u'SOA': 0.10000000000000001, u'TargetX': -10, u'corrAns': u'space', u'Validity': u'Invalid', u'CueX': 10},
      {u'SOA': 0.10000000000000001, u'TargetX': 400, u'corrAns': None, u'Validity': u'Notarg', u'CueX': -10},
      {u'SOA': 0.10000000000000001, u'TargetX': 400, u'corrAns': None, u'Validity': u'Notarg', u'CueX': 10}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
    Routine trial
  LoopTerminator trials_2
  Routine endinstr
